---
API: 2.1
OpenSesame: 3.2.6
Platform: nt
---
set width 1024
set uniform_coordinates no
set title "Distraction Filtering Task"
set synth_backend legacy
set subject_parity even
set subject_nr 0
set start filter
set sound_sample_size -16
set sound_freq 48000
set sound_channels 2
set sound_buf_size 1024
set sampler_backend legacy
set round_decimals 2
set mouse_backend xpyriment
set keyboard_backend legacy
set height 768
set fullscreen no
set form_clicks no
set foreground white
set font_underline no
set font_size 18
set font_italic no
set font_family mono
set font_bold no
set experiment_path "C:/Users/surya/Desktop/APRESEARCH/Filter task/Mod"
set disable_garbage_collection yes
set description "A template containing a practice and an experimental phase"
set coordinates relative
set compensation 0
set color_backend legacy
set clock_backend legacy
set canvas_backend xpyriment
set bidi no
set background black

define keyboard_response NEXT
	set timeout infinite
	set flush yes
	set event_type keypress
	set duration keypress
	set description "Collects keyboard responses"
	set allowed_responses "="

define keyboard_response NEXT_1
	set timeout infinite
	set flush yes
	set event_type keypress
	set duration keypress
	set description "Collects keyboard responses"
	set allowed_responses "="

define keyboard_response NEXT_2
	set timeout infinite
	set flush yes
	set event_type keypress
	set duration keypress
	set description "Collects keyboard responses"
	set allowed_responses "="

define keyboard_response NEXT_3
	set timeout infinite
	set flush yes
	set event_type keypress
	set duration keypress
	set description "Collects keyboard responses"
	set allowed_responses "="

define keyboard_response NEXT_4
	set timeout infinite
	set flush yes
	set event_type keypress
	set duration keypress
	set description "Collects keyboard responses"
	set allowed_responses "="

define form_text_display Welcome_Screen
	set timeout infinite
	set spacing 10
	set rows "1;4;1"
	set only_render no
	set ok_text "Next>"
	set margins "50;50;50;50"
	set form_title "Multimedia Multitasking"
	__form_text__
	Welcome!
	
	Thank you for taking part in this study. In this study you will answer some questions about multimedia use and your multitasking preferences. In addition, you will also do an experiment about working memory. In total, the study will take approximately 30 minutes. 
	
	This experiment poses no known risks to your health. Your responses will be treated confidentially and your anonymity will be ensured.
	
	Upon completion of your participation in this study you will be provided with a brief explanation of the question this study addresses.
	
	Any question you might have about this research can be addressed to the e-mail address below. 
	
	Sincerely,
	Surya Manikhandan
	AP Research, Lovejoy High School
	Manikhandan_Surya@lovejoyisd.com
	__end__
	set description "A simple text display form"
	set cols "1;1;1"
	set _theme gray
	widget 0 0 3 1 label text="[form_title]"
	widget 0 1 3 1 label center=no text="[form_text]"
	widget 1 2 1 1 button text="[ok_text]"


define feedback answer_validation
	set reset_variables no
	set duration 150
	set description "Provides feedback to the participant"
	draw image center=1 file="[correct].png" scale=1 show_if=always x=0 y=0 z_index=0

define feedback answer_validation_1
	set reset_variables no
	set duration 150
	set description "Provides feedback to the participant"
	draw image center=1 file="[correct].png" scale=1 show_if=always x=0 y=0 z_index=0

define feedback answer_validation_2
	set reset_variables no
	set duration 150
	set description "Provides feedback to the participant"
	draw image center=1 file="[correct].png" scale=1 show_if=always x=0 y=0 z_index=0

define feedback answer_validation_3
	set reset_variables no
	set duration 150
	set description "Provides feedback to the participant"
	draw image center=1 file="[correct].png" scale=1 show_if=always x=0 y=0 z_index=0

define feedback answer_validation_4
	set reset_variables no
	set duration 150
	set description "Provides feedback to the participant"
	draw image center=1 file="[correct].png" scale=1 show_if=always x=0 y=0 z_index=0

define form_text_display end
	set timeout infinite
	set spacing 10
	set rows "1;4;1"
	set only_render no
	set ok_text Ok
	set margins "50;50;50;50"
	set form_title Goodbye
	__form_text__
	This is the end of the experiment!
	
	I'd like to say thank you very much for participating, it is a huge help for my research project!
	
	if everyone isn't finished, you can relax for now. Just be sure to exit the experiment first. 
	
	After everyone is done, I'll be giving a short debrief. I'll tell you what the experiment was, what was logged, and what that means for the study. Have any other questions? Feel free to ask after the debrief.
	
	  
	Click "Ok" to exit.
	__end__
	set description "A simple text display form"
	set cols "1;1;1"
	set _theme gray
	widget 0 0 3 1 label text="[form_title]"
	widget 0 1 3 1 label center=no text="[form_text]"
	widget 1 2 1 1 button text="[ok_text]"


define form_text_display exp_instruction
	set timeout infinite
	set spacing 10
	set rows "1;4;1"
	set only_render no
	set ok_text Ok
	set margins "50;50;50;50"
	set form_title Experiment
	__form_text__
	Thank you for filling in the questionnaire. Now, we will start with the experiment. Please THOROUGHLY read the folllowing instructions. Have any questions? Ask the proctor, they'll be able to provide help.
	
	In this task, you will be shown a group of red and blue rectangles.  Each group will be shown twice.
	
	When you see each group of rectangles for the second time, your task is to determine if ONE of the RED rectangles has changed orientation.  You can IGNORE the BLUE rectangles.
	
	If you think one of the red rectangles changed orientation, press the LEFT arrow on the keyboard. If you think they did not change, press the RIGHT arrow on the keyboard.
	
	Click "Ok" to continue.
	__end__
	set description "A simple text display form"
	set cols "1;1;1"
	set _theme gray
	widget 0 0 3 1 label text="[form_title]"
	widget 0 1 3 1 label center=no text="[form_text]"
	widget 1 2 1 1 button text="[ok_text]"


define form_text_display exp_instruction_2
	set timeout infinite
	set spacing 10
	set rows "1;4;1"
	set only_render no
	set ok_text Next
	set margins "50;50;50;50"
	set form_title Practice
	__form_text__
	Keep your eyes on the "+" sign in the middle of the screen. Press "SPACEBAR" whenever you are ready to begin a trial.
	
	The first set of rectangles will be flashed for a fraction of a second.
	
	Then the second set will be shown for 2 seconds.  You have only those 2 seconds to enter your response: LEFT if one of the RED rectangles CHANGED orientation, and RIGHT if they DID NOT CHANGE.
	
	Click "Next" to continue.
	__end__
	set description "A simple text display form"
	set cols "1;1;1"
	set _theme gray
	widget 0 0 3 1 label text="[form_title]"
	widget 0 1 3 1 label center=no text="[form_text]"
	widget 1 2 1 1 button text="[ok_text]"


define form_text_display exp_instruction_3
	set timeout infinite
	set spacing 10
	set rows "1;4;1"
	set only_render no
	set ok_text Ok
	set margins "50;50;50;50"
	set form_title Practice
	__form_text__
	Click "Ok" to begin a practice session of 5 questions. 
	
	Here, try to get a sense for the rhythm of the presentation.
	
	This section is unscored but is timed exactly like the actual test.
	
	After each trial, you will see a green check mark if you answered correctly, and a red "X" if you did not.
	
	After this section, you'll be given some quick stats on your performance. 
	__end__
	set description "A simple text display form"
	set cols "1;1;1"
	set _theme gray
	widget 0 0 3 1 label text="[form_title]"
	widget 0 1 3 1 label center=no text="[form_text]"
	widget 1 2 1 1 button text="[ok_text]"


define form_text_display exp_instruction_4
	set timeout infinite
	set spacing 10
	set rows "1;4;1"
	set only_render no
	set ok_text Next
	set margins "50;50;50;50"
	set form_title Experiment
	__form_text__
	OK, now we will begin the actual task of 104 questions. Don't worry, it's much shorter than it sounds and should take no longer than 5 minutes.
	
	**IMPORTANT: After the end of each block, you wil be presented with a feedback screen. Please note down the numbers EXACTLY as they appear onto your response sheet. Be sure to double check that your values are correct BEFORE moving to the nest section.**
	
	Remember, your task is to determine if one of the RED rectangles has changed orientation.  If a red rectangle CHANGED orientation, press LEFT. If NO rectangles CHANGED, press RIGHT.
	
	Press SPACEBAR whenever you want to begin the next trial.
	
	You can IGNORE the BLUE rectangles.
	
	Click "Next" to continue. Good Luck!
	__end__
	set description "A simple text display form"
	set cols "1;1;1"
	set _theme gray
	widget 0 0 3 1 label text="[form_title]"
	widget 0 1 3 1 label center=no text="[form_text]"
	widget 1 2 1 1 button text="[ok_text]"


define sequence experiment
	set flush_keyboard yes
	set description "Runs a number of items in sequence"
	run exp_instruction always
	run exp_instruction_2 always
	run exp_instruction_3 always
	run practice_loop always
	run experimental_loop always
	run end always

define loop experiment_block_0dist
	set source_file ""
	set source table
	set skip 0
	set repeat 1
	set order random
	set offset no
	set item trial_sequence
	set description "A single block of trials"
	set cycles 26
	set continuous no
	set column_order "Stim;Test;Change;CorrectAnswer;Ndist"
	set break_if_on_first yes
	set break_if never
	setcycle 0 Test 53
	setcycle 0 Change yes
	setcycle 0 CorrectAnswer left
	setcycle 1 Test 54
	setcycle 1 Change yes
	setcycle 1 CorrectAnswer left
	setcycle 2 Test 55
	setcycle 2 Change yes
	setcycle 2 CorrectAnswer left
	setcycle 3 Test 56
	setcycle 3 Change yes
	setcycle 3 CorrectAnswer left
	setcycle 4 Test 57
	setcycle 4 Change yes
	setcycle 4 CorrectAnswer left
	setcycle 5 Test 58
	setcycle 5 Change yes
	setcycle 5 CorrectAnswer left
	setcycle 6 Test 59
	setcycle 6 Change yes
	setcycle 6 CorrectAnswer left
	setcycle 7 Test 60
	setcycle 7 Change yes
	setcycle 7 CorrectAnswer left
	setcycle 8 Test 61
	setcycle 8 Change yes
	setcycle 8 CorrectAnswer left
	setcycle 9 Test 62
	setcycle 9 Change yes
	setcycle 9 CorrectAnswer left
	setcycle 10 Test 63
	setcycle 10 Change yes
	setcycle 10 CorrectAnswer left
	setcycle 11 Test 64
	setcycle 11 Change yes
	setcycle 11 CorrectAnswer left
	setcycle 12 Test 65
	setcycle 12 Change yes
	setcycle 12 CorrectAnswer left
	setcycle 13 Test 1
	setcycle 13 Change no
	setcycle 13 CorrectAnswer right
	setcycle 14 Test 2
	setcycle 14 Change no
	setcycle 14 CorrectAnswer right
	setcycle 15 Test 3
	setcycle 15 Change no
	setcycle 15 CorrectAnswer right
	setcycle 16 Test 4
	setcycle 16 Change no
	setcycle 16 CorrectAnswer right
	setcycle 17 Test 5
	setcycle 17 Change no
	setcycle 17 CorrectAnswer right
	setcycle 18 Test 6
	setcycle 18 Change no
	setcycle 18 CorrectAnswer right
	setcycle 19 Test 7
	setcycle 19 Change no
	setcycle 19 CorrectAnswer right
	setcycle 20 Test 8
	setcycle 20 Change no
	setcycle 20 CorrectAnswer right
	setcycle 21 Test 9
	setcycle 21 Change no
	setcycle 21 CorrectAnswer right
	setcycle 22 Test 10
	setcycle 22 Change no
	setcycle 22 CorrectAnswer right
	setcycle 23 Test 11
	setcycle 23 Change no
	setcycle 23 CorrectAnswer right
	setcycle 24 Test 12
	setcycle 24 Change no
	setcycle 24 CorrectAnswer right
	setcycle 25 Test 13
	setcycle 25 Change no
	setcycle 25 CorrectAnswer right
	run trial_sequence_4

define loop experiment_block_2DIST
	set source_file ""
	set source table
	set skip 0
	set repeat 1
	set order random
	set offset no
	set item trial_sequence
	set description "A single block of trials"
	set cycles 26
	set continuous no
	set column_order "Stim;Test;Change;CorrectAnswer;Ndist"
	set break_if_on_first yes
	set break_if never
	setcycle 0 Test 66
	setcycle 0 Change yes
	setcycle 0 CorrectAnswer left
	setcycle 1 Test 67
	setcycle 1 Change yes
	setcycle 1 CorrectAnswer left
	setcycle 2 Test 68
	setcycle 2 Change yes
	setcycle 2 CorrectAnswer left
	setcycle 3 Test 69
	setcycle 3 Change yes
	setcycle 3 CorrectAnswer left
	setcycle 4 Test 70
	setcycle 4 Change yes
	setcycle 4 CorrectAnswer left
	setcycle 5 Test 71
	setcycle 5 Change yes
	setcycle 5 CorrectAnswer left
	setcycle 6 Test 72
	setcycle 6 Change yes
	setcycle 6 CorrectAnswer left
	setcycle 7 Test 73
	setcycle 7 Change yes
	setcycle 7 CorrectAnswer left
	setcycle 8 Test 74
	setcycle 8 Change yes
	setcycle 8 CorrectAnswer left
	setcycle 9 Test 75
	setcycle 9 Change yes
	setcycle 9 CorrectAnswer left
	setcycle 10 Test 76
	setcycle 10 Change yes
	setcycle 10 CorrectAnswer left
	setcycle 11 Test 77
	setcycle 11 Change yes
	setcycle 11 CorrectAnswer left
	setcycle 12 Test 78
	setcycle 12 Change yes
	setcycle 12 CorrectAnswer left
	setcycle 13 Test 14
	setcycle 13 Change no
	setcycle 13 CorrectAnswer right
	setcycle 14 Test 15
	setcycle 14 Change no
	setcycle 14 CorrectAnswer right
	setcycle 15 Test 16
	setcycle 15 Change no
	setcycle 15 CorrectAnswer right
	setcycle 16 Test 17
	setcycle 16 Change no
	setcycle 16 CorrectAnswer right
	setcycle 17 Test 18
	setcycle 17 Change no
	setcycle 17 CorrectAnswer right
	setcycle 18 Test 19
	setcycle 18 Change no
	setcycle 18 CorrectAnswer right
	setcycle 19 Test 20
	setcycle 19 Change no
	setcycle 19 CorrectAnswer right
	setcycle 20 Test 21
	setcycle 20 Change no
	setcycle 20 CorrectAnswer right
	setcycle 21 Test 22
	setcycle 21 Change no
	setcycle 21 CorrectAnswer right
	setcycle 22 Test 23
	setcycle 22 Change no
	setcycle 22 CorrectAnswer right
	setcycle 23 Test 24
	setcycle 23 Change no
	setcycle 23 CorrectAnswer right
	setcycle 24 Test 25
	setcycle 24 Change no
	setcycle 24 CorrectAnswer right
	setcycle 25 Test 26
	setcycle 25 Change no
	setcycle 25 CorrectAnswer right
	run trial_sequence_3

define loop experiment_block_4DIST
	set source_file ""
	set source table
	set skip 0
	set repeat 1
	set order random
	set offset no
	set item trial_sequence
	set description "A single block of trials"
	set cycles 26
	set continuous no
	set column_order "Stim;Test;Change;CorrectAnswer;Ndist"
	set break_if_on_first yes
	set break_if never
	setcycle 0 Test 79
	setcycle 0 Change yes
	setcycle 0 CorrectAnswer left
	setcycle 1 Test 80
	setcycle 1 Change yes
	setcycle 1 CorrectAnswer left
	setcycle 2 Test 81
	setcycle 2 Change yes
	setcycle 2 CorrectAnswer left
	setcycle 3 Test 82
	setcycle 3 Change yes
	setcycle 3 CorrectAnswer left
	setcycle 4 Test 83
	setcycle 4 Change yes
	setcycle 4 CorrectAnswer left
	setcycle 5 Test 84
	setcycle 5 Change yes
	setcycle 5 CorrectAnswer left
	setcycle 6 Test 85
	setcycle 6 Change yes
	setcycle 6 CorrectAnswer left
	setcycle 7 Test 86
	setcycle 7 Change yes
	setcycle 7 CorrectAnswer left
	setcycle 8 Test 87
	setcycle 8 Change yes
	setcycle 8 CorrectAnswer left
	setcycle 9 Test 88
	setcycle 9 Change yes
	setcycle 9 CorrectAnswer left
	setcycle 10 Test 89
	setcycle 10 Change yes
	setcycle 10 CorrectAnswer left
	setcycle 11 Test 90
	setcycle 11 Change yes
	setcycle 11 CorrectAnswer left
	setcycle 12 Test 91
	setcycle 12 Change yes
	setcycle 12 CorrectAnswer left
	setcycle 13 Test 27
	setcycle 13 Change no
	setcycle 13 CorrectAnswer right
	setcycle 14 Test 28
	setcycle 14 Change no
	setcycle 14 CorrectAnswer right
	setcycle 15 Test 29
	setcycle 15 Change no
	setcycle 15 CorrectAnswer right
	setcycle 16 Test 30
	setcycle 16 Change no
	setcycle 16 CorrectAnswer right
	setcycle 17 Test 31
	setcycle 17 Change no
	setcycle 17 CorrectAnswer right
	setcycle 18 Test 32
	setcycle 18 Change no
	setcycle 18 CorrectAnswer right
	setcycle 19 Test 33
	setcycle 19 Change no
	setcycle 19 CorrectAnswer right
	setcycle 20 Test 34
	setcycle 20 Change no
	setcycle 20 CorrectAnswer right
	setcycle 21 Test 35
	setcycle 21 Change no
	setcycle 21 CorrectAnswer right
	setcycle 22 Test 36
	setcycle 22 Change no
	setcycle 22 CorrectAnswer right
	setcycle 23 Test 37
	setcycle 23 Change no
	setcycle 23 CorrectAnswer right
	setcycle 24 Test 38
	setcycle 24 Change no
	setcycle 24 CorrectAnswer right
	setcycle 25 Test 39
	setcycle 25 Change no
	setcycle 25 CorrectAnswer right
	run trial_sequence_2

define loop experiment_block_6DIST
	set source_file ""
	set source table
	set skip 0
	set repeat 1
	set order random
	set offset no
	set item trial_sequence
	set description "A single block of trials"
	set cycles 26
	set continuous no
	set column_order "Stim;Test;Change;CorrectAnswer;Ndist"
	set break_if_on_first yes
	set break_if never
	setcycle 0 Test 92
	setcycle 0 Change yes
	setcycle 0 CorrectAnswer left
	setcycle 1 Test 93
	setcycle 1 Change yes
	setcycle 1 CorrectAnswer left
	setcycle 2 Test 94
	setcycle 2 Change yes
	setcycle 2 CorrectAnswer left
	setcycle 3 Test 95
	setcycle 3 Change yes
	setcycle 3 CorrectAnswer left
	setcycle 4 Test 96
	setcycle 4 Change yes
	setcycle 4 CorrectAnswer left
	setcycle 5 Test 97
	setcycle 5 Change yes
	setcycle 5 CorrectAnswer left
	setcycle 6 Test 98
	setcycle 6 Change yes
	setcycle 6 CorrectAnswer left
	setcycle 7 Test 99
	setcycle 7 Change yes
	setcycle 7 CorrectAnswer left
	setcycle 8 Test 100
	setcycle 8 Change yes
	setcycle 8 CorrectAnswer left
	setcycle 9 Test 101
	setcycle 9 Change yes
	setcycle 9 CorrectAnswer left
	setcycle 10 Test 102
	setcycle 10 Change yes
	setcycle 10 CorrectAnswer left
	setcycle 11 Test 103
	setcycle 11 Change yes
	setcycle 11 CorrectAnswer left
	setcycle 12 Test 104
	setcycle 12 Change yes
	setcycle 12 CorrectAnswer left
	setcycle 13 Test 40
	setcycle 13 Change no
	setcycle 13 CorrectAnswer right
	setcycle 14 Test 41
	setcycle 14 Change no
	setcycle 14 CorrectAnswer right
	setcycle 15 Test 42
	setcycle 15 Change no
	setcycle 15 CorrectAnswer right
	setcycle 16 Test 43
	setcycle 16 Change no
	setcycle 16 CorrectAnswer right
	setcycle 17 Test 44
	setcycle 17 Change no
	setcycle 17 CorrectAnswer right
	setcycle 18 Test 45
	setcycle 18 Change no
	setcycle 18 CorrectAnswer right
	setcycle 19 Test 46
	setcycle 19 Change no
	setcycle 19 CorrectAnswer right
	setcycle 20 Test 47
	setcycle 20 Change no
	setcycle 20 CorrectAnswer right
	setcycle 21 Test 48
	setcycle 21 Change no
	setcycle 21 CorrectAnswer right
	setcycle 22 Test 49
	setcycle 22 Change no
	setcycle 22 CorrectAnswer right
	setcycle 23 Test 50
	setcycle 23 Change no
	setcycle 23 CorrectAnswer right
	setcycle 24 Test 51
	setcycle 24 Change no
	setcycle 24 CorrectAnswer right
	setcycle 25 Test 52
	setcycle 25 Change no
	setcycle 25 CorrectAnswer right
	run trial_sequence

define sequence experiment_sequence
	set flush_keyboard yes
	set description "A sequence containing a single block of trials followed by feedback to the participant"
	run exp_instruction_4 always
	run resetfeedback_1 always
	run experiment_block_6DIST always
	run feedback_1 always
	run NEXT_1 always
	run resetfeedback_2 always
	run experiment_block_4DIST always
	run feedback_2 always
	run NEXT_2 always
	run resetfeedback_3 always
	run experiment_block_2DIST always
	run feedback_3 always
	run NEXT_3 always
	run resetfeedback_4 always
	run experiment_block_0dist always
	run feedback_4 always
	run NEXT_4 always
	run resetfeedback_5 always

define loop experimental_loop
	set source_file ""
	set source table
	set repeat 1
	set order random
	set item experiment_sequence
	set description "A loop containing one or more experimental blocks"
	set cycles 1
	set continuous no
	set column_order practice
	set break_if_on_first yes
	set break_if never
	setcycle 0 empty_column ""
	run experiment_sequence

define feedback feedback
	set reset_variables yes
	set duration 0
	set description "Provides feedback to the participant"
	draw textline center=1 color=white font_bold=no font_family=mono font_italic=no font_size=18 html=yes show_if=always text="Your average response time was [avg_rt]ms" x=0 y=-96 z_index=0
	draw textline center=1 color=white font_bold=no font_family=mono font_italic=no font_size=18 html=yes show_if=always text="Press the equal key to continue" x=0 y=224 z_index=0
	draw textline center=1 color=white font_bold=no font_family=mono font_italic=no font_size=18 html=yes show_if=always text="Your accuracy was [acc]%" x=0 y=-32 z_index=0
	draw textline center=1 color=white font_bold=no font_family=mono font_italic=no font_size=18 html=yes show_if=always text="That's pretty good! Keep up the energy.<br /><br />" x=0 y=32 z_index=0
	draw textline center=1 color=white font_bold=no font_family=mono font_italic=no font_size=18 html=yes show_if=always text="DO NOT LOG THIS DATA" x=0 y=160 z_index=0

define feedback feedback_1
	set reset_variables yes
	set duration 0
	set description "Provides feedback to the participant"
	draw textline center=1 color=white font_bold=no font_family=mono font_italic=no font_size=18 html=yes show_if=always text="Your average response time was [avg_rt]  ms" x=0 y=-96 z_index=0
	draw textline center=1 color=white font_bold=no font_family=mono font_italic=no font_size=18 html=yes show_if=always text="Press the equal key to continue" x=0 y=224 z_index=0
	draw textline center=1 color=white font_bold=no font_family=mono font_italic=no font_size=18 html=yes show_if=always text="Your accuracy was [acc]  %" x=0 y=-32 z_index=0
	draw textline center=1 color=white font_bold=no font_family=mono font_italic=no font_size=18 html=yes show_if=always text="Please note this down on your results sheet<br />" x=0 y=32 z_index=0

define feedback feedback_2
	set reset_variables yes
	set duration 0
	set description "Provides feedback to the participant"
	draw textline center=1 color=white font_bold=no font_family=mono font_italic=no font_size=18 html=yes show_if=always text="Your average response time was [avg_rt]  ms" x=0 y=-96 z_index=0
	draw textline center=1 color=white font_bold=no font_family=mono font_italic=no font_size=18 html=yes show_if=always text="Press the equal key to continue" x=0 y=224 z_index=0
	draw textline center=1 color=white font_bold=no font_family=mono font_italic=no font_size=18 html=yes show_if=always text="Your accuracy was [acc]  %" x=0 y=-32 z_index=0
	draw textline center=1 color=white font_bold=no font_family=mono font_italic=no font_size=18 html=yes show_if=always text="Please note this down on your results sheet<br />" x=0 y=32 z_index=0

define feedback feedback_3
	set reset_variables yes
	set duration 0
	set description "Provides feedback to the participant"
	draw textline center=1 color=white font_bold=no font_family=mono font_italic=no font_size=18 html=yes show_if=always text="Your average response time was [avg_rt]  ms" x=0 y=-96 z_index=0
	draw textline center=1 color=white font_bold=no font_family=mono font_italic=no font_size=18 html=yes show_if=always text="Press the equal key to continue" x=0 y=224 z_index=0
	draw textline center=1 color=white font_bold=no font_family=mono font_italic=no font_size=18 html=yes show_if=always text="Your accuracy was [acc]  %" x=0 y=-32 z_index=0
	draw textline center=1 color=white font_bold=no font_family=mono font_italic=no font_size=18 html=yes show_if=always text="Please note this down on your results sheet<br />" x=0 y=32 z_index=0

define feedback feedback_4
	set reset_variables yes
	set duration 0
	set description "Provides feedback to the participant"
	draw textline center=1 color=white font_bold=no font_family=mono font_italic=no font_size=18 html=yes show_if=always text="Your average response time was [avg_rt]  ms" x=0 y=-96 z_index=0
	draw textline center=1 color=white font_bold=no font_family=mono font_italic=no font_size=18 html=yes show_if=always text="Press the equal key to continue" x=0 y=224 z_index=0
	draw textline center=1 color=white font_bold=no font_family=mono font_italic=no font_size=18 html=yes show_if=always text="Your accuracy was [acc]  %" x=0 y=-32 z_index=0
	draw textline center=1 color=white font_bold=no font_family=mono font_italic=no font_size=18 html=yes show_if=always text="Please note this down on your results sheet<br />" x=0 y=32 z_index=0

define sequence filter
	set flush_keyboard yes
	set description "The main sequence of the experiment"
	run questionnaire always
	run experiment always

define sketchpad fixation1_display
	set reset_variables no
	set duration 396
	set description "Displays stimuli"
	draw image center=1 file="fixationGrn .png" scale=1 show_if=always x=0 y=0 z_index=0

define sketchpad fixation1_display_1
	set reset_variables no
	set duration 396
	set description "Displays stimuli"
	draw image center=1 file="fixationGrn .png" scale=1 show_if=always x=0 y=0 z_index=0

define sketchpad fixation1_display_2
	set reset_variables no
	set duration 396
	set description "Displays stimuli"
	draw image center=1 file="fixationGrn .png" scale=1 show_if=always x=0 y=0 z_index=0

define sketchpad fixation1_display_3
	set reset_variables no
	set duration 396
	set description "Displays stimuli"
	draw image center=1 file="fixationGrn .png" scale=1 show_if=always x=0 y=0 z_index=0

define sketchpad fixation1_display_4
	set reset_variables no
	set duration 396
	set description "Displays stimuli"
	draw image center=1 file="fixationGrn .png" scale=1 show_if=always x=0 y=0 z_index=0

define sketchpad fixation2_display
	set reset_variables no
	set duration 896
	set description "Displays stimuli"
	draw image center=1 file="fixation .png" scale=1 show_if=always x=0 y=0 z_index=0

define sketchpad fixation2_display_1
	set reset_variables no
	set duration 896
	set description "Displays stimuli"
	draw image center=1 file="fixation .png" scale=1 show_if=always x=0 y=0 z_index=0

define sketchpad fixation2_display_2
	set reset_variables no
	set duration 896
	set description "Displays stimuli"
	draw image center=1 file="fixation .png" scale=1 show_if=always x=0 y=0 z_index=0

define sketchpad fixation2_display_3
	set reset_variables no
	set duration 896
	set description "Displays stimuli"
	draw image center=1 file="fixation .png" scale=1 show_if=always x=0 y=0 z_index=0

define sketchpad fixation2_display_4
	set reset_variables no
	set duration 896
	set description "Displays stimuli"
	draw image center=1 file="fixation .png" scale=1 show_if=always x=0 y=0 z_index=0

define sketchpad fixation_start_display
	set start_response_interval no
	set reset_variables no
	set duration keypress
	set description "Displays stimuli"
	draw fixdot color=white show_if=always style=default x=0 y=0 z_index=0
	draw image center=1 file="fixationGrn .png" scale=1 show_if=always x=0 y=0 z_index=0

define sketchpad fixation_start_display_1
	set start_response_interval no
	set reset_variables no
	set duration keypress
	set description "Displays stimuli"
	draw fixdot color=white show_if=always style=default x=0 y=0 z_index=0
	draw image center=1 file="fixationGrn .png" scale=1 show_if=always x=0 y=0 z_index=0

define sketchpad fixation_start_display_2
	set start_response_interval no
	set reset_variables no
	set duration keypress
	set description "Displays stimuli"
	draw fixdot color=white show_if=always style=default x=0 y=0 z_index=0
	draw image center=1 file="fixationGrn .png" scale=1 show_if=always x=0 y=0 z_index=0

define sketchpad fixation_start_display_3
	set start_response_interval no
	set reset_variables no
	set duration keypress
	set description "Displays stimuli"
	draw fixdot color=white show_if=always style=default x=0 y=0 z_index=0
	draw image center=1 file="fixationGrn .png" scale=1 show_if=always x=0 y=0 z_index=0

define sketchpad fixation_start_display_4
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
define loop practice_block_loop
	set source_file ""
	set source table
	set skip 0
	set repeat 0.05
	set order random
	set offset no
	set item trial_sequence
	set description "A single block of trials"
	set cycles 104
	set continuous no
	set column_order "Stim;Test;Change;CorrectAnswer;Ndist"
	set break_if_on_first yes
	set break_if never
	setcycle 0 Test 1
	setcycle 0 Change no
	setcycle 0 CorrectAnswer right
	setcycle 1 Test 2
	setcycle 1 Change no
	setcycle 1 CorrectAnswer right
	setcycle 2 Test 3
	setcycle 2 Change no
	setcycle 2 CorrectAnswer right
	setcycle 3 Test 4
	setcycle 3 Change no
	setcycle 3 CorrectAnswer right
	setcycle 4 Test 5
	setcycle 4 Change no
	setcycle 4 CorrectAnswer right
	setcycle 5 Test 6
	setcycle 5 Change no
	setcycle 5 CorrectAnswer right
	setcycle 6 Test 7
	setcycle 6 Change no
	setcycle 6 CorrectAnswer right
	setcycle 7 Test 8
	setcycle 7 Change no
	setcycle 7 CorrectAnswer right
	setcycle 8 Test 9
	setcycle 8 Change no
	setcycle 8 CorrectAnswer right
	setcycle 9 Test 10
	setcycle 9 Change no
	setcycle 9 CorrectAnswer right
	setcycle 10 Test 11
	setcycle 10 Change no
	setcycle 10 CorrectAnswer right
	setcycle 11 Test 12
	setcycle 11 Change no
	setcycle 11 CorrectAnswer right
	setcycle 12 Test 13
	setcycle 12 Change no
	setcycle 12 CorrectAnswer right
	setcycle 13 Test 14
	setcycle 13 Change no
	setcycle 13 CorrectAnswer right
	setcycle 14 Test 15
	setcycle 14 Change no
	setcycle 14 CorrectAnswer right
	setcycle 15 Test 16
	setcycle 15 Change no
	setcycle 15 CorrectAnswer right
	setcycle 16 Test 17
	setcycle 16 Change no
	setcycle 16 CorrectAnswer right
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	setcycle 52 Test 53
	setcycle 52 Change yes
	setcycle 52 CorrectAnswer left
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	run trial_sequence_1

define loop practice_loop
	set source_file ""
	set source table
	set repeat 1
	set order random
	set item practice_sequence
	set description "A loop containing one or more practice blocks"
	set cycles 1
	set continuous no
	set column_order practice
	set break_if_on_first yes
	set break_if never
	setcycle 0 practice yes
	run practice_sequence

define sequence practice_sequence
	set flush_keyboard yes
	set description "A sequence containing a single block of trials followed by feedback to the participant"
	run reset_feedback always
	run practice_block_loop always
	run feedback always
	run NEXT always
	run resetfeedback always

define sequence questionnaire
	set flush_keyboard yes
	set description "Runs a number of items in sequence"
	run Welcome_Screen always

define reset_feedback reset_feedback
	set description "Resets the feedback variables, such as 'avg_rt' and 'acc'"

define reset_feedback resetfeedback
	set description "Resets the feedback variables, such as 'avg_rt' and 'acc'"

define reset_feedback resetfeedback_1
	set description "Resets the feedback variables, such as 'avg_rt' and 'acc'"

define reset_feedback resetfeedback_2
	set description "Resets the feedback variables, such as 'avg_rt' and 'acc'"

define reset_feedback resetfeedback_3
	set description "Resets the feedback variables, such as 'avg_rt' and 'acc'"

define reset_feedback resetfeedback_4
	set description "Resets the feedback variables, such as 'avg_rt' and 'acc'"

define reset_feedback resetfeedback_5
	set description "Resets the feedback variables, such as 'avg_rt' and 'acc'"

define sketchpad stim_display
	set reset_variables no
	set duration 96
	set description "Displays stimuli"
	draw image center=1 file="[Test]a.png" scale=1 show_if=always x=0 y=0 z_index=0

define sketchpad stim_display_1
	set reset_variables no
	set duration 96
	set description "Displays stimuli"
	draw image center=1 file="[Test]a.png" scale=1 show_if=always x=0 y=0 z_index=0

define sketchpad stim_display_2
	set reset_variables no
	set duration 96
	set description "Displays stimuli"
	draw image center=1 file="[Test]a.png" scale=1 show_if=always x=0 y=0 z_index=0

define sketchpad stim_display_3
	set reset_variables no
	set duration 96
	set description "Displays stimuli"
	draw image center=1 file="[Test]a.png" scale=1 show_if=always x=0 y=0 z_index=0

define sketchpad stim_display_4
	set reset_variables no
	set duration 96
	set description "Displays stimuli"
	draw image center=1 file="[Test]a.png" scale=1 show_if=always x=0 y=0 z_index=0

define sketchpad test_display
	set reset_variables no
	set duration 0
	set description "Displays stimuli"
	draw image center=1 file="[Test]b.png" scale=1 show_if=always x=0 y=0 z_index=0

define sketchpad test_display_1
	set reset_variables no
	set duration 0
	set description "Displays stimuli"
	draw image center=1 file="[Test]b.png" scale=1 show_if=always x=0 y=0 z_index=0

define sketchpad test_display_2
	set reset_variables no
	set duration 0
	set description "Displays stimuli"
	draw image center=1 file="[Test]b.png" scale=1 show_if=always x=0 y=0 z_index=0

define sketchpad test_display_3
	set reset_variables no
	set duration 0
	set description "Displays stimuli"
	draw image center=1 file="[Test]b.png" scale=1 show_if=always x=0 y=0 z_index=0

define sketchpad test_display_4
	set reset_variables no
	set duration 0
	set description "Displays stimuli"
	draw image center=1 file="[Test]b.png" scale=1 show_if=always x=0 y=0 z_index=0

define keyboard_response test_response
	set timeout 2996
	set flush yes
	set event_type keypress
	set duration keypress
	set description "Collects keyboard responses"
	set correct_response "[CorrectAnswer]"
	set allowed_responses "left;right"

define keyboard_response test_response_1
	set timeout 2996
	set flush yes
	set event_type keypress
	set duration keypress
	set description "Collects keyboard responses"
	set correct_response "[CorrectAnswer]"
	set allowed_responses "left;right"

define keyboard_response test_response_2
	set timeout 2996
	set flush yes
	set event_type keypress
	set duration keypress
	set description "Collects keyboard responses"
	set correct_response "[CorrectAnswer]"
	set allowed_responses "left;right"

define keyboard_response test_response_3
	set timeout 2996
	set flush yes
	set event_type keypress
	set duration keypress
	set description "Collects keyboard responses"
	set correct_response "[CorrectAnswer]"
	set allowed_responses "left;right"

define keyboard_response test_response_4
	set timeout 2996
	set flush yes
	set event_type keypress
	set duration keypress
	set description "Collects keyboard responses"
	set correct_response "[CorrectAnswer]"
	set allowed_responses "left;right"

define sequence trial_sequence
	set flush_keyboard yes
	set description "A single trial"
	run fixation_start_display always
	run fixation1_display always
	run stim_display always
	run fixation2_display always
	run test_display always
	run test_response always
	run answer_validation always

define sequence trial_sequence_1
	set flush_keyboard yes
	set description "A single trial"
	run fixation_start_display_1 always
	run fixation1_display_1 always
	run stim_display_1 always
	run fixation2_display_1 always
	run test_display_1 always
	run test_response_1 always
	run answer_validation_1 always

define sequence trial_sequence_2
	set flush_keyboard yes
	set description "A single trial"
	run fixation_start_display_2 always
	run fixation1_display_2 always
	run stim_display_2 always
	run fixation2_display_2 always
	run test_display_2 always
	run test_response_2 always
	run answer_validation_2 always

define sequence trial_sequence_3
	set flush_keyboard yes
	set description "A single trial"
	run fixation_start_display_3 always
	run fixation1_display_3 always
	run stim_display_3 always
	run fixation2_display_3 always
	run test_display_3 always
	run test_response_3 always
	run answer_validation_3 always

define sequence trial_sequence_4
	set flush_keyboard yes
	set description "A single trial"
	run fixation_start_display_4 always
	run fixation1_display_4 always
	run stim_display_4 always
	run fixation2_display_4 always
	run test_display_4 always
	run test_response_4 always
	run answer_validation_4 always

