---
API: 2.1
OpenSesame: 3.2.5
Platform: nt
---
set width 900
set uniform_coordinates yes
set title "New experiment"
set subject_parity even
set subject_nr 0
set start experiment
set sound_sample_size -16
set sound_freq 48000
set sound_channels 2
set sound_buf_size 1024
set sampler_backend legacy
set round_decimals 2
set mouse_backend xpyriment
set keyboard_backend legacy
set height 900
set fullscreen no
set form_clicks no
set foreground "#000000"
set font_underline no
set font_size 24
set font_italic no
set font_family "Yu Gothic UI Light"
set font_bold no
set experiment_path "C:/Users/surya/Desktop/teststuff/TestA"
set disable_garbage_collection yes
set description "The main experiment item"
set coordinates uniform
set compensation 0
set color_backend legacy
set clock_backend legacy
set canvas_backend xpyriment
set background "#ffffff"

define loop Block_Loop
	set source_file ""
	set source table
	set repeat 1
	set order random
	set description "Repeatedly runs another item"
	set cycles 30
	set continuous no
	set break_if_on_first yes
	set break_if never
	setcycle 0 ImgNO 1
	setcycle 1 ImgNO 2
	setcycle 2 ImgNO 3
	setcycle 3 ImgNO 4
	setcycle 4 ImgNO 5
	setcycle 5 ImgNO 6
	setcycle 6 ImgNO 7
	setcycle 7 ImgNO 8
	setcycle 8 ImgNO 9
	setcycle 9 ImgNO 10
	setcycle 10 ImgNO 11
	setcycle 11 ImgNO 12
	setcycle 12 ImgNO 13
	setcycle 13 ImgNO 14
	setcycle 14 ImgNO 15
	setcycle 15 ImgNO 16
	setcycle 16 ImgNO 17
	setcycle 17 ImgNO 18
	setcycle 18 ImgNO 19
	setcycle 19 ImgNO 20
	setcycle 20 ImgNO 21
	setcycle 21 ImgNO 22
	setcycle 22 ImgNO 23
	setcycle 23 ImgNO 24
	setcycle 24 ImgNO 25
	setcycle 25 ImgNO 26
	setcycle 26 ImgNO 27
	setcycle 27 ImgNO 28
	setcycle 28 ImgNO 29
	setcycle 29 ImgNO 30
	run Trial_sequence

define loop Block_Loop_1
	set source_file ""
	set source table
	set repeat 0.07
	set order random
	set description "Repeatedly runs another item"
	set cycles 30
	set continuous no
	set break_if_on_first yes
	set break_if never
	setcycle 0 ImgNO 1
	setcycle 1 ImgNO 2
	setcycle 2 ImgNO 3
	setcycle 3 ImgNO 4
	setcycle 4 ImgNO 5
	setcycle 5 ImgNO 6
	setcycle 6 ImgNO 7
	setcycle 7 ImgNO 8
	setcycle 8 ImgNO 9
	setcycle 9 ImgNO 10
	setcycle 10 ImgNO 11
	setcycle 11 ImgNO 12
	setcycle 12 ImgNO 13
	setcycle 13 ImgNO 14
	setcycle 14 ImgNO 15
	setcycle 15 ImgNO 16
	setcycle 16 ImgNO 17
	setcycle 17 ImgNO 18
	setcycle 18 ImgNO 19
	setcycle 19 ImgNO 20
	setcycle 20 ImgNO 21
	setcycle 21 ImgNO 22
	setcycle 22 ImgNO 23
	setcycle 23 ImgNO 24
	setcycle 24 ImgNO 25
	setcycle 25 ImgNO 26
	setcycle 26 ImgNO 27
	setcycle 27 ImgNO 28
	setcycle 28 ImgNO 29
	setcycle 29 ImgNO 30
	run Trial_sequence_1

define sequence Block_Sequence
	set flush_keyboard yes
	set description "Runs a number of items in sequence"
	run Block_Loop always

define sequence Block_Sequence_1
	set flush_keyboard yes
	set description "Runs a number of items in sequence"
	run Block_Loop_1 always

define form_text_display EndOfPractice
	set timeout infinite
	set spacing 10
	set rows "1;4;1"
	set only_render no
	set ok_text "MOVE ON>"
	set margins "50;50;50;50"
	set form_title "END OF PRACTICE SECTION"
	set form_text "The practice section has ended. you will now move on the experimental, SCORED section."
	set description "A simple text display form"
	set cols "1;1;1"
	set _theme gray
	widget 0 0 3 1 label text="[form_title]"
	widget 0 1 3 1 label center=no text="[form_text]"
	widget 1 2 1 1 button text="[ok_text]"


define form_text_display EndOfTest
	set timeout infinite
	set spacing 10
	set rows "1;4;1"
	set only_render no
	set ok_text "Finish (PROCTOR ONLY)>"
	set margins "50;50;50;50"
	set form_title "~END OF TEST~"
	__form_text__
	The experiment has been finished. Please notify your test proctor immediately.
	
	THANK YOU SO VERY MUCH FOR YOUR PARTICIPATION.
	__end__
	set description "A simple text display form"
	set cols "1;1;1"
	set _theme gray
	widget 0 0 3 1 label text="[form_title]"
	widget 0 1 3 1 label center=no text="[form_text]"
	widget 1 2 1 1 button text="[ok_text]"


define loop Experimental_loop
	set source_file ""
	set source table
	set repeat 1
	set order random
	set description "Repeatedly runs another item"
	set cycles 1
	set continuous no
	set break_if_on_first yes
	set break_if never
	setcycle 0 practice no
	run Block_Sequence

define sketchpad FixationCue
	set duration 195
	set description "Displays stimuli"
	draw image center=1 file="plusonly.jpg" scale=1 show_if=always x=0 y=0 z_index=0

define sketchpad FixationCue_1
	set duration 195
	set description "Displays stimuli"
	draw image center=1 file="plusonly.jpg" scale=1 show_if=always x=0 y=0 z_index=0

define sketchpad MemoryArray
	set duration 95
	set description "Displays stimuli"
	draw image center=1 file="[ImgNO]a.jpg" scale=0.48 show_if=always x=0 y=0 z_index=0

define sketchpad MemoryArray_1
	set duration 95
	set description "Displays stimuli"
	draw image center=1 file="[ImgNO]a.jpg" scale=0.48 show_if=always x=0 y=0 z_index=0

define loop Practice_loop_1
	set source_file ""
	set source table
	set repeat 1
	set order random
	set description "Repeatedly runs another item"
	set cycles 1
	set continuous no
	set break_if_on_first yes
	set break_if never
	setcycle 0 practice yes
	run Block_Sequence_1

define sketchpad Question
	set duration 1
	set description "Displays stimuli"
	draw textline center=1 color="#000000" font_bold=yes font_family="Yu Gothic UI Light" font_italic=no font_size=55 html=yes show_if=always text="Did Any of The Targets Rotate?" x=0.0 y=-224.0 z_index=0
	draw image center=1 file="Arrowkeys.jpg" scale=0.8 show_if=always x=9.0 y=36.0 z_index=0

define sketchpad Question_1
	set duration 1
	set description "Displays stimuli"
	draw textline center=1 color="#000000" font_bold=yes font_family="Yu Gothic UI Light" font_italic=no font_size=55 html=yes show_if=always text="Did Any of The Targets Rotate?" x=0 y=-224 z_index=0
	draw image center=1 file="Arrowkeys.jpg" scale=0.8 show_if=always x=9 y=36 z_index=0

define keyboard_response Response
	set timeout infinite
	set flush yes
	set event_type keypress
	set duration keypress
	set description "Collects keyboard responses"

define keyboard_response Response_1
	set timeout infinite
	set flush yes
	set event_type keypress
	set duration keypress
	set description "Collects keyboard responses"

define sketchpad RetentionIntervalFixation
	set duration 895
	set description "Displays stimuli"
	draw image center=1 file="plusonly.jpg" scale=1 show_if=always x=0 y=0 z_index=0

define sketchpad RetentionIntervalFixation_1
	set duration 895
	set description "Displays stimuli"
	draw image center=1 file="plusonly.jpg" scale=1 show_if=always x=0 y=0 z_index=0

define sketchpad TestArray
	set duration 1995
	set description "Displays stimuli"
	draw image center=1 file="[ImgNO]b.jpg" scale=0.48 show_if=always x=0 y=0 z_index=0

define sketchpad TestArray_1
	set duration 1995
	set description "Displays stimuli"
	draw image center=1 file="[ImgNO]b.jpg" scale=0.48 show_if=always x=0 y=0 z_index=0

define sequence Trial_sequence
	set flush_keyboard yes
	set description "Runs a number of items in sequence"
	run FixationCue always
	run MemoryArray always
	run RetentionIntervalFixation always
	run TestArray always
	run Question_1 always
	run Response_1 always
	run log always

define sequence Trial_sequence_1
	set flush_keyboard yes
	set description "Runs a number of items in sequence"
	run FixationCue_1 always
	run MemoryArray_1 always
	run RetentionIntervalFixation_1 always
	run TestArray_1 always
	run Question always
	run Response always

define form_text_display WelcomeMessage
	set timeout infinite
	set spacing 10
	set rows "1;4;1"
	set only_render no
	set ok_text "Next>"
	set margins "50;50;50;50"
	set form_title "Thanks for participating!"
	__form_text__
	Thank you for participating in the study! you are about to begin the Test "A" of the study. Instructions are provided in the following pages. please review the information thoroughly. Please direct any questions to the proctor. 
	__end__
	set description "A simple text display form"
	set cols "1;1;1"
	set _theme gray
	widget 0 0 3 1 label text="[form_title]"
	widget 0 1 3 1 label center=no text="[form_text]"
	widget 1 2 1 1 button text="[ok_text]"


define sequence experiment
	set flush_keyboard yes
	set description "Runs a number of items in sequence"
	run WelcomeMessage always
	run instructions_1 always
	run instructionscontd always
	run Practice_loop_1 always
	run EndOfPractice always
	run Experimental_loop always
	run EndOfTest always

define sketchpad instructions_1
	set duration keypress
	set description "Displays stimuli"
	draw image center=1 file="redrectangle.jpg" rotation=45 scale=1 show_if=always x=-96 y=-192 z_index=0
	draw image center=1 file="redrectangle.jpg" rotation=45 scale=1 show_if=always x=96 y=-192 z_index=0
	draw image center=1 file="bluerectangle.jpg" rotation=135 scale=1 show_if=always x=384 y=-192 z_index=0
	draw image center=1 file="bluerectangle.jpg" rotation=135 scale=1 show_if=always x=-384 y=-192 z_index=0
	draw image center=1 file="bluerectangle.jpg" rotation=135 scale=1 show_if=always x=256 y=-192 z_index=0
	draw image center=1 file="bluerectangle.jpg" rotation=135 scale=1 show_if=always x=-256 y=-192 z_index=0
	draw textline center=1 color="#000000" font_bold=yes font_family="Yu Gothic UI Light" font_italic=no font_size=24 html=yes show_if=always text="Target<br />" x=96 y=-192 z_index=0
	draw textline center=1 color="#000000" font_bold=yes font_family="Yu Gothic UI Light" font_italic=no font_size=24 html=yes show_if=always text="Target<br />" x=-96 y=-192 z_index=0
	draw textline center=1 color="#000000" font_bold=no font_family="Yu Gothic UI Light" font_italic=yes font_size=24 html=yes show_if=always text=Distraction x=-368 y=-224 z_index=0
	draw textline center=1 color="#000000" font_bold=no font_family="Yu Gothic UI Light" font_italic=yes font_size=24 html=yes show_if=always text=Distraction x=-288 y=-160 z_index=0
	draw textline center=1 color="#000000" font_bold=no font_family="Yu Gothic UI Light" font_italic=yes font_size=24 html=yes show_if=always text=Distraction x=224 y=-160 z_index=0
	draw textline center=1 color="#000000" font_bold=no font_family="Yu Gothic UI Light" font_italic=yes font_size=24 html=yes show_if=always text=Distraction x=384 y=-224 z_index=0
	draw textline center=1 color="#000000" font_bold=yes font_family="Yu Gothic UI Light" font_italic=yes font_size=24 html=yes show_if=always text="Your task in this test is to IGNORE blue rectangles while FOCUSING on red rectangles." x=0 y=0 z_index=0
	draw textline center=1 color="#000000" font_bold=no font_family="Yu Gothic UI Light" font_italic=no font_size=24 html=yes show_if=always text="Press any key to continue..." x=0 y=128 z_index=0

define form_text_display instructionscontd
	set timeout infinite
	set spacing 10
	set rows "1;4;1"
	set only_render no
	set ok_text "I'm Ready To Practice>"
	set margins "50;50;50;50"
	set form_title "Instructions Continued..."
	__form_text__
	First, You will see a series of red and blue rectangles. You will then see another set of rectangles where one of the red rectangle may or may not have rotated. YOUR JOB IS TO NOTE SUCH CHANGE.
	
	You will have 2 unscored practice questioned, followed by 30 scored questions. Answer the prompts as QUICKLY and as ACCURATELY as you can!
	
	You will now enter the PRACTICE section.
	__end__
	set description "A simple text display form"
	set cols "1;1;1"
	set _theme gray
	widget 0 0 3 1 label text="[form_title]"
	widget 0 1 3 1 label center=no text="[form_text]"
	widget 1 2 1 1 button text="[ok_text]"


define logger log
	set description "Logs experimental data"
	set auto_log yes

define form_multiple_choice new_form_multiple_choice
	set timeout infinite
	set spacing 10
	set question "Did any of the target rectangles rotate?"
	__options__
	YES
	NO
	__end__
	set margins "50;50;50;50"
	set form_var response
	set form_title Prompt
	set description "A simple multiple choice item"
	set button_text Ok
	set allow_multiple no
	set advance_immediately yes
	set _theme gray

define form_multiple_choice new_form_multiple_choice_1
	set timeout infinite
	set spacing 10
	set question "Did any of the target rectangles rotate?"
	__options__
	YES
	NO
	__end__
	set margins "50;50;50;50"
	set form_var response
	set form_title Prompt
	set description "A simple multiple choice item"
	set button_text Ok
	set allow_multiple no
	set advance_immediately yes
	set _theme gray

