---
API: 2.1
OpenSesame: 3.2.5
Platform: nt
---
set width 900
set uniform_coordinates yes
set title "Extended template"
set subject_parity even
set subject_nr 0
set start experiment
set sound_sample_size -16
set sound_freq 48000
set sound_channels 2
set sound_buf_size 1024
set sampler_backend legacy
set round_decimals 2
set mouse_backend xpyriment
set keyboard_backend legacy
set height 900
set fullscreen no
set form_clicks no
set foreground black
set font_underline no
set font_size 24
set font_italic no
set font_family mono
set font_bold no
set experiment_path "C:/Users/surya/Desktop/teststuff/TestB"
set disable_garbage_collection yes
set description "A template containing a practice and an experimental phase"
set coordinates uniform
set compensation 0
set color_backend legacy
set clock_backend legacy
set canvas_backend xpyriment
set bidi yes
set background white

define sketchpad CSI
	set start_response_interval no
	set duration 100
	set description "Displays stimuli"
	draw fixdot color=white show_if=always style=default x=0 y=0 z_index=0
	draw fixdot color="#ffffff" show_if=always style=default x=0 y=0 z_index=0
	draw fixdot color=black show_if=always style=default x=0 y=0 z_index=0

define sketchpad CSI_1
	set start_response_interval no
	set duration 100
	set description "Displays stimuli"
	draw fixdot color=white show_if=always style=default x=0 y=0 z_index=0
	draw fixdot color="#ffffff" show_if=always style=default x=0 y=0 z_index=0
	draw fixdot color=black show_if=always style=default x=0 y=0 z_index=0

define sketchpad Cue
	set duration 195
	set description "Displays stimuli"
	draw image center=1 file="[Prompt].PNG" scale=1 show_if=always x=0 y=0 z_index=0

define sketchpad Cue_1
	set duration 195
	set description "Displays stimuli"
	draw image center=1 file="[Prompt].PNG" scale=1 show_if=always x=0 y=0 z_index=0

define form_text_display EndOfPractice
	set timeout infinite
	set spacing 10
	set rows "1;4;1"
	set only_render no
	set ok_text "I'm Ready>"
	set margins "50;50;50;50"
	set form_title Prompt
	__form_text__
	THIS IS THE END OF THE PRACTICE PERIOD. 
	
	You will now move on to the experimental section. Should you have any questions ask your proctor at once.
	
	Remember to answer the questions as QUICKLY and as ACCURATELY as you can.  
	__end__
	set description "A simple text display form"
	set cols "1;1;1"
	set _theme gray
	widget 0 0 3 1 label text="[form_title]"
	widget 0 1 3 1 label center=no text="[form_text]"
	widget 1 2 1 1 button text="[ok_text]"


define form_text_display EndOfTest
	set timeout infinite
	set spacing 10
	set rows "1;4;1"
	set only_render no
	set ok_text "FINISH (PROCTOR ONLY)>>"
	set margins "50;50;50;50"
	set form_title "END OF TEST"
	__form_text__
	THIS IS THE END OF THE TEST. 
	
	Thank you so very much for participating. please notify your proctor at once for your debrief. 
	__end__
	set description "A simple text display form"
	set cols "1;1;1"
	set _theme gray
	widget 0 0 3 1 label text="[form_title]"
	widget 0 1 3 1 label center=no text="[form_text]"
	widget 1 2 1 1 button text="[ok_text]"


define form_text_display Endofinstruction
	set timeout infinite
	set spacing 10
	set rows "1;4;1"
	set only_render no
	set ok_text "I'm Ready To Practice"
	set margins "50;50;50;50"
	set form_title "Thanks For Participating"
	__form_text__
	You will have an UNSCORED, practice phase of 4 questions. Aftter the end of the practice portion, you will be notified and taken to the SCORED experimental section, which is 40 questions long. 
	
	ANSWER THE QUESTUIONS AS QUICKLY AND AS ACCURATELY AS YOU CAN!
	__end__
	set description "A simple text display form"
	set cols "1;1;1"
	set _theme gray
	widget 0 0 3 1 label text="[form_title]"
	widget 0 1 3 1 label center=no text="[form_text]"
	widget 1 2 1 1 button text="[ok_text]"


define sketchpad RCI
	set start_response_interval no
	set duration 250
	set description "Displays stimuli"
	draw fixdot color=white show_if=always style=default x=0 y=0 z_index=0
	draw fixdot color="#ffffff" show_if=always style=default x=0 y=0 z_index=0
	draw fixdot color="#000000" show_if=always style=default x=0 y=0 z_index=0

define sketchpad RCI_1
	set start_response_interval no
	set duration 250
	set description "Displays stimuli"
	draw fixdot color=white show_if=always style=default x=0 y=0 z_index=0
	draw fixdot color="#ffffff" show_if=always style=default x=0 y=0 z_index=0
	draw fixdot color="#000000" show_if=always style=default x=0 y=0 z_index=0

define sketchpad Target
	set duration 6
	set description "Displays stimuli"
	draw textline center=1 color=black font_bold=no font_family=mono font_italic=no font_size=125 html=yes show_if=always text="[Stim]" x=0.0 y=0.0 z_index=0
	draw image center=1 file="LeftPrompt.PNG" scale=1 show_if=always x=-224 y=0 z_index=0
	draw image center=1 file="RightPrompt.PNG" scale=1 show_if=always x=224 y=0 z_index=0

define sketchpad Target_1
	set duration 6
	set description "Displays stimuli"
	draw textline center=1 color=black font_bold=no font_family=mono font_italic=no font_size=125 html=yes show_if=always text="[Stim]" x=0 y=0 z_index=0
	draw image center=1 file="LeftPrompt.PNG" scale=1 show_if=always x=-224 y=0 z_index=0
	draw image center=1 file="RightPrompt.PNG" scale=1 show_if=always x=224 y=0 z_index=0

define form_text_display WelcomeMessage
	set timeout infinite
	set spacing 10
	set rows "1;4;1"
	set only_render no
	set ok_text "Next>"
	set margins "50;50;50;50"
	set form_title "Thanks For Participating"
	__form_text__
	Thank you for participating in the study! You are about to begin the Test "B" of the study. Instructions are provided in the following pages. Please review the information thoroughly. Please direct any questions to the proctor. 
	__end__
	set description "A simple text display form"
	set cols "1;1;1"
	set _theme gray
	widget 0 0 3 1 label text="[form_title]"
	widget 0 1 3 1 label center=no text="[form_text]"
	widget 1 2 1 1 button text="[ok_text]"


define loop block_loop_1
	set source table
	set skip 0
	set repeat 0.1
	set order random
	set offset no
	set item trial_sequence
	set description "A single block of trials"
	set cycles 40
	set continuous no
	set column_order ""
	set break_if_on_first yes
	set break_if never
	setcycle 0 Stim i9
	setcycle 0 Prompt L
	setcycle 1 Stim k9
	setcycle 1 Prompt N
	setcycle 2 Stim a8
	setcycle 2 Prompt L
	setcycle 3 Stim i9
	setcycle 3 Prompt L
	setcycle 4 Stim k5
	setcycle 4 Prompt L
	setcycle 5 Stim s8
	setcycle 5 Prompt L
	setcycle 6 Stim 3a
	setcycle 6 Prompt N
	setcycle 7 Stim p5
	setcycle 7 Prompt L
	setcycle 8 Stim 2u
	setcycle 8 Prompt L
	setcycle 9 Stim 2a
	setcycle 9 Prompt L
	setcycle 10 Stim 5n
	setcycle 10 Prompt N
	setcycle 11 Stim 6n
	setcycle 11 Prompt N
	setcycle 12 Stim 9u
	setcycle 12 Prompt L
	setcycle 13 Stim 3n
	setcycle 13 Prompt L
	setcycle 14 Stim 3s
	setcycle 14 Prompt L
	setcycle 15 Stim a3
	setcycle 15 Prompt N
	setcycle 16 Stim 6u
	setcycle 16 Prompt N
	setcycle 17 Stim 4k
	setcycle 17 Prompt N
	setcycle 18 Stim i9
	setcycle 18 Prompt L
	setcycle 19 Stim p3
	setcycle 19 Prompt L
	setcycle 20 Stim e4
	setcycle 20 Prompt N
	setcycle 21 Stim u7
	setcycle 21 Prompt N
	setcycle 22 Stim 5p
	setcycle 22 Prompt N
	setcycle 23 Stim u5
	setcycle 23 Prompt N
	setcycle 24 Stim 9s
	setcycle 24 Prompt L
	setcycle 25 Stim a4
	setcycle 25 Prompt L
	setcycle 26 Stim n8
	setcycle 26 Prompt N
	setcycle 27 Stim 4p
	setcycle 27 Prompt L
	setcycle 28 Stim e2
	setcycle 28 Prompt L
	setcycle 29 Stim u8
	setcycle 29 Prompt L
	setcycle 30 Stim 5k
	setcycle 30 Prompt L
	setcycle 31 Stim 9k
	setcycle 31 Prompt N
	setcycle 32 Stim 6p
	setcycle 32 Prompt N
	setcycle 33 Stim 8k
	setcycle 33 Prompt N
	setcycle 34 Stim n6
	setcycle 34 Prompt L
	setcycle 35 Stim 5a
	setcycle 35 Prompt N
	setcycle 36 Stim a6
	setcycle 36 Prompt N
	setcycle 37 Stim 4a
	setcycle 37 Prompt N
	setcycle 38 Stim i5
	setcycle 38 Prompt L
	setcycle 39 Stim 8a
	setcycle 39 Prompt L
	run trial_sequence_1

define loop block_loop_1_1
	set source_file ""
	set source table
	set skip 0
	set repeat 1
	set order sequential
	set offset no
	set item trial_sequence
	set description "A single block of trials"
	set cycles 40
	set continuous no
	set column_order ""
	set break_if_on_first yes
	set break_if never
	setcycle 0 Stim i9
	setcycle 0 Prompt L
	setcycle 1 Stim k9
	setcycle 1 Prompt N
	setcycle 2 Stim a8
	setcycle 2 Prompt L
	setcycle 3 Stim i9
	setcycle 3 Prompt L
	setcycle 4 Stim k5
	setcycle 4 Prompt L
	setcycle 5 Stim s8
	setcycle 5 Prompt L
	setcycle 6 Stim 3a
	setcycle 6 Prompt N
	setcycle 7 Stim p5
	setcycle 7 Prompt L
	setcycle 8 Stim 2u
	setcycle 8 Prompt L
	setcycle 9 Stim 2a
	setcycle 9 Prompt L
	setcycle 10 Stim 5n
	setcycle 10 Prompt N
	setcycle 11 Stim 6n
	setcycle 11 Prompt N
	setcycle 12 Stim 9u
	setcycle 12 Prompt L
	setcycle 13 Stim 3n
	setcycle 13 Prompt L
	setcycle 14 Stim 3s
	setcycle 14 Prompt L
	setcycle 15 Stim a3
	setcycle 15 Prompt N
	setcycle 16 Stim 6u
	setcycle 16 Prompt N
	setcycle 17 Stim 4k
	setcycle 17 Prompt N
	setcycle 18 Stim i9
	setcycle 18 Prompt L
	setcycle 19 Stim p3
	setcycle 19 Prompt L
	setcycle 20 Stim e4
	setcycle 20 Prompt N
	setcycle 21 Stim u7
	setcycle 21 Prompt N
	setcycle 22 Stim 5p
	setcycle 22 Prompt N
	setcycle 23 Stim u5
	setcycle 23 Prompt N
	setcycle 24 Stim 9s
	setcycle 24 Prompt L
	setcycle 25 Stim a4
	setcycle 25 Prompt L
	setcycle 26 Stim n8
	setcycle 26 Prompt N
	setcycle 27 Stim 4p
	setcycle 27 Prompt L
	setcycle 28 Stim e2
	setcycle 28 Prompt L
	setcycle 29 Stim u8
	setcycle 29 Prompt L
	setcycle 30 Stim 5k
	setcycle 30 Prompt L
	setcycle 31 Stim 9k
	setcycle 31 Prompt N
	setcycle 32 Stim 6p
	setcycle 32 Prompt N
	setcycle 33 Stim 8k
	setcycle 33 Prompt N
	setcycle 34 Stim n6
	setcycle 34 Prompt L
	setcycle 35 Stim 5a
	setcycle 35 Prompt N
	setcycle 36 Stim a6
	setcycle 36 Prompt N
	setcycle 37 Stim 4a
	setcycle 37 Prompt N
	setcycle 38 Stim i5
	setcycle 38 Prompt L
	setcycle 39 Stim 8a
	setcycle 39 Prompt L
	run trial_sequence_1_1

define sequence block_sequence_1
	set flush_keyboard yes
	set description "A sequence containing a single block of trials followed by feedback to the participant"
	run block_loop_1 always

define sequence block_sequence_1_1
	set flush_keyboard yes
	set description "A sequence containing a single block of trials followed by feedback to the participant"
	run block_loop_1_1 always

define sequence experiment
	set flush_keyboard yes
	set description "The main sequence of the experiment"
	run WelcomeMessage always
	run instructions always
	run instructions_1 always
	run instructions_1_1 always
	run Endofinstruction always
	run practice_loop_1 always
	run EndOfPractice always
	run experimental_loop always
	run EndOfTest always

define loop experimental_loop
	set source_file ""
	set source table
	set skip 0
	set repeat 1
	set order random
	set offset no
	set item block_sequence
	set description "A loop containing one or more practice blocks"
	set cycles 1
	set continuous no
	set column_order practice
	set break_if_on_first yes
	set break_if never
	setcycle 0 practice no
	run block_sequence_1_1

define sketchpad instructions
	set start_response_interval no
	set duration keypress
	set description "A sketchpad containing the instructions for the participant"
	draw textline center=1 color=white font_bold=no font_family=mono font_italic=no font_size=18 html=yes show_if=always text="Press any key to begin!" x=0 y=0 z_index=0
	draw image center=1 file="N.PNG" scale=1 show_if=always x=-224 y=-352 z_index=0
	draw textline center=1 color=black font_bold=no font_family=mono font_italic=no font_size=60 html=yes show_if=always text="+" x=-224 y=-288 z_index=0
	draw textline center=1 color=black font_bold=no font_family=mono font_italic=no font_size=100 html=yes show_if=always text=a6 x=-224 y=-192 z_index=0
	draw image center=1 file="L.PNG" scale=1 show_if=always x=224 y=-352 z_index=0
	draw textline center=1 color=black font_bold=no font_family=mono font_italic=no font_size=60 html=yes show_if=always text="+" x=224 y=-288 z_index=0
	draw textline center=1 color=black font_bold=no font_family=mono font_italic=no font_size=100 html=yes show_if=always text="5z<br />" x=224 y=-192 z_index=0
	draw textline center=1 color=black font_bold=no font_family=mono font_italic=no font_size=26 html=yes show_if=always text="This test will test your performance when confronted with a varying or stagnant set of tasks" x=-8 y=-9 z_index=0
	draw textline center=1 color=black font_bold=no font_family=mono font_italic=no font_size=26 html=yes show_if=always text="You will be asked to determine whether a LETTER is a VOWEL or CONSONANT.<br /><br />You also might be asked if a NUMBER is ODD or EVEN. <br /><br />A Prompt will tell you whether to FOCUS on letters or numbers. you will resond with your left or right keys. <br />" x=-11 y=161 z_index=0
	draw textline center=1 color=black font_bold=no font_family=mono font_italic=no font_size=33 html=yes show_if=always text="Press any key to continue...<br />" x=37 y=353 z_index=0

define sketchpad instructions_1
	set start_response_interval no
	set duration keypress
	set description "A sketchpad containing the instructions for the participant"
	draw textline center=1 color=white font_bold=no font_family=mono font_italic=no font_size=18 html=yes show_if=always text="Press any key to begin!" x=0 y=-128 z_index=0
	draw image center=1 file="N.PNG" scale=1 show_if=always x=0 y=-352 z_index=0
	draw textline center=1 color=black font_bold=no font_family=mono font_italic=no font_size=60 html=yes show_if=always text="+" x=0 y=-288 z_index=0
	draw textline center=1 color=black font_bold=no font_family=mono font_italic=no font_size=100 html=yes show_if=always text=a5 x=-14 y=-203 z_index=0
	draw image center=1 file="LeftPrompt.PNG" scale=1 show_if=always x=-224 y=-192 z_index=0
	draw image center=1 file="RightPrompt.PNG" scale=1 show_if=always x=192 y=-192 z_index=0
	draw textline center=1 color=black font_bold=no font_family=mono font_italic=no font_size=24 html=yes show_if=always text="You will first see a prompt which will tell you whether or not to focus on the number or the letter. <br /><br />in this case, you must focus on the NUMBER. The number, 5, is odd, so the left option is correct. The correct response to this is the LEFT KEY. <br /><br /><br />Press the left arrow key to continue." x=6 y=89 z_index=0

define sketchpad instructions_1_1
	set start_response_interval no
	set duration keypress
	set description "A sketchpad containing the instructions for the participant"
	draw textline center=1 color=white font_bold=no font_family=mono font_italic=no font_size=18 html=yes show_if=always text="Press any key to begin!" x=0 y=-128 z_index=0
	draw textline center=1 color=black font_bold=no font_family=mono font_italic=no font_size=60 html=yes show_if=always text="+" x=0 y=-288 z_index=0
	draw textline center=1 color=black font_bold=no font_family=mono font_italic=no font_size=100 html=yes show_if=always text=z3 x=-14 y=-203 z_index=0
	draw image center=1 file="LeftPrompt.PNG" scale=1 show_if=always x=-224 y=-192 z_index=0
	draw image center=1 file="RightPrompt.PNG" scale=1 show_if=always x=192 y=-192 z_index=0
	draw textline center=1 color=black font_bold=no font_family=mono font_italic=no font_size=24 html=yes show_if=always text="You will first see a prompt which will tell you whether or not to focus on the number or the letter. <br /><br />in this case, you must focus on the LETTER. The letter, z, is a consonant, so the right option is correct. The correct response to this is the RIGHT KEY. <br /><br /><br />Press the right arrow key to continue." x=6 y=89 z_index=0
	draw image center=1 file="L.PNG" scale=1 show_if=always x=0 y=-352 z_index=0

define keyboard_response keyboard_response_1
	set timeout 10000
	set flush yes
	set event_type keypress
	set duration keypress
	set description "Collects keyboard responses"

define keyboard_response keyboard_response_1_1
	set timeout 10000
	set flush yes
	set event_type keypress
	set duration keypress
	set description "Collects keyboard responses"

define logger logger
	set description "Logs experimental data"
	set auto_log yes

define loop practice_loop_1
	set source_file ""
	set source table
	set skip 0
	set repeat 1
	set order random
	set offset no
	set item block_sequence
	set description "A loop containing one or more practice blocks"
	set cycles 1
	set continuous no
	set column_order practice
	set break_if_on_first yes
	set break_if never
	setcycle 0 practice yes
	run block_sequence_1

define sequence trial_sequence_1
	set flush_keyboard yes
	set description "A single trial"
	run RCI always
	run Cue always
	run CSI always
	run Target always
	run keyboard_response_1 always

define sequence trial_sequence_1_1
	set flush_keyboard yes
	set description "A single trial"
	run RCI_1 always
	run Cue_1 always
	run CSI_1 always
	run Target_1 always
	run keyboard_response_1_1 always
	run logger always

